# This model is of no pharmacological relevance and serves simply to test
# the implementation of the methods.

[[model]]
name: Logistic Growth Model
author: David Augustin

# Initial values
central_compartment.drug = 0 [ng]

[central_compartment]
# bound variables (dosing controlled by the protocol, and time)
dose_rate = 0 [1/h]
    in [1/h]
    bind pace
    desc: Dose rate in 1/h. Controlled by protocol.
time = 0 [h]
    in [h]
    bind time
    desc: independent time variable in h.

# compartment internal parameters
lambda = 1 [1/h]
    in [1/h]
    desc: Linear growth factor of the drug (no pharmacological relevance).
capacity = 1 [ng]
    in [ng]
    desc: Maximumal drug in compartment.

# state variable
dot(drug) = dose_rate + lambda * drug * (1 - drug / capacity)
    in [ng]
    desc: Drug in central compartment non-dimensionalised.
